CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:4281
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/Users/lulu/Documents/year4/具身智能体/高内涵图像
    Name of the file:cp_loaddata_test.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):28,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:3|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Marker
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:4|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:5|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
    Select images to measure:Marker
    Select objects to measure:Cytoplasm, Cells, Nuclei

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Cytoplasm, Cells, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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